PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = SpatialOrientation solo project
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent SceneImage1
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent textbox_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.4)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = Left= incongruent        Right= congruent
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  Routine instructions
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        **Welcome to the Experiment!**

        In this task, you'll view scenes and identify if the spatial orientation matches your expectations. Use:

        - 'Left' for incongruent.
        - 'Right' for congruent.

        Thank you! Let's begin!
  Routine Thank_you
    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating in the experiment
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SpatialOrientation_Conditions (3).xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\Scene image1.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongruent image 1.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\SceneImage 2.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongrunent image 2.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\SceneImage 3.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongruent image 3.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\scene image 4.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongruent image 4.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\scene image 5.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongruent image 5.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\scene image 6.jpg', 'OrientationCongruency': 1, 'corrAns': 'right'},
      {'ImageFile': 'C:\\Users\\Shivani\\OneDrive\\Desktop\\incongruent image 6.jpg', 'OrientationCongruency': 0, 'corrAns': 'left'}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
    Routine trial
  LoopTerminator trials
  Routine Thank_you
